/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "arms":
    [
        {
            "name": "PSM2",
            "type": "PSM",
            "io": "sawRobotIO1394-PSM2-27374.xml",
            "pid": "../sawControllersPID-PSM.xml",
            "kinematic": "../psm-large-needle-driver.json"
        }
        ,
        {
            "name": "MTML",
            "type": "MTM",
            "io": "sawRobotIO1394-MTML-22723-foot-pedal.xml",
            "pid": "../sawControllersPID-MTML.xml",
            "kinematic": "../mtm.json"
        }
    ]
    ,
    "psm-teleops":
    [
        {
            "master": "MTML",
            "slave": "PSM2",
            "period": 0.005, // in seconds
            "rotation" : [[-1.0000,  0.0000,  0.0000],
                          [ 0.0000, -1.0000,  0.0000],
                          [ 0.0000,  0.0000,  1.0000]]
        }
    ]
}
